PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = official assembling objects test
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Routines
  Routine trial
    ImageComponent question_images
      image [set every repeat] = $ImageFile
      size = (1.25, 0.5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent participant_response
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    TextComponent nextq
      color = black
      font = times new roman
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the space bar to move forward.
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    PolygonComponent box1
      fillColor [set every repeat] = white
      pos = (-0.23, -0.28)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent box2
      fillColor [set every repeat] = white
      pos = (0.03, -0.28)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent box3
      fillColor [set every repeat] = white
      pos = (0.26, -0.28)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent box4
      fillColor [set every repeat] = white
      pos = (0.47, -0.28)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = box1, box2, box3, box4
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent instructionsreal
      color = black
      font = times new roman
      letterHeight = 0.05
      pos = (0, 0.33)
      startVal [time (s)] = 0.0
      text = Click on the box under your answer to select. It will turn black once selected.
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        #Initializing Variables for Checkboxes
        checkboxes=[box1, box2, box3, box4]
        clicked=[]
      Each Frame:
        #Creating Checkboxes
        for box in checkboxes:
            if mouse.isPressedIn(box) and box.name not in clicked:
                box.color = "black"
                clicked.append(box.name)
      End Routine:
        #Correct Point System
        correct=0
        for answer in clicked:
            if answer == corrAns:
                correct +=1
        questions.addData('correct', correct)
  Routine instructions
    TextComponent participant_instructions
      color = black
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is an untimed multiple-choice test.

        The left-most box shows shapes broken up. The 4 boxes on the right show the shapes assembled into a new figure. Select the answer where the shapes are assembled correctly.

        To select your answer, click on the box under your answer. Once selected, it will turn black. Keep in mind that you cannot change your mind once you select a box.

        Press the space bar to move forward.
    KeyboardComponent remove_instructions
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thank_you_slide
    TextComponent thankyouslide
      color = black
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The test is now complete. Thank you!

        Press the space bar to exit the test.
    KeyboardComponent exit
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sample_question_instructions
    TextComponent sample_instructions
      color = black
      font = Times New Roman
      letterHeight = 0.05
      pos = (0,0.25)
      startVal [time (s)] = 0.0
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      text:
        Here is a sample question.

        Practice responding by clicking the box under your answer. It will turn black once selected.
    KeyboardComponent end_sampleinstructions
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent practiceq
      image = practiceq.png
      pos = (0, -0.1)
      size = (1, 0.35)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    PolygonComponent sampleBox1
      fillColor [set every repeat] = $[1,1,1]
      pos = (-0.13, -0.302)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent sampleBox2
      fillColor [set every repeat] = $[1,1,1]
      pos = (0.05, -0.302)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent sampleBox3
      fillColor [set every repeat] = $[1,1,1]
      pos = (0.23, -0.302)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent sampleBox4
      fillColor [set every repeat] = $[1,1,1]
      pos = (0.41, -0.302)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent mouse3
      clickable = sampleBox1, sampleBox2, sampleBox3, sampleBox4
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        checkboxes = [sampleBox1, sampleBox2, sampleBox3, sampleBox4]
        clicked = []
      Each Frame:
        for box in checkboxes:
            if mouse3.isPressedIn(box) and box.name not in clicked:
                box.color = "black"
                clicked.append(box.name)
    TextComponent text_2
      color = black
      font = Times new roman
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the space bar to move forward.
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  Routine welcome
    TextComponent text
      color = black
      font = times new roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Assembling Objects Test.

        Press the space bar to move forward.
    KeyboardComponent endwelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_q_feedback
    TextComponent feedbacksample
      color = black
      font = times new roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The correct answer was the 3rd box.

        This is the end of the sample question. Press the space bar to begin the test. Good luck!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine instructions
  Routine sample_question_instructions
  Routine practice_q_feedback
  LoopInitiator questions loopType="TrialHandler"
    conditionsFile = image_stimulus revised w images.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile', 'assembling_images/q1.png'), ('corrAns', 4)]),
      OrderedDict([('ImageFile', 'assembling_images/q2.png'), ('corrAns', 1)]),
      OrderedDict([('ImageFile', 'assembling_images/q3.png'), ('corrAns', 4)]),
      OrderedDict([('ImageFile', 'assembling_images/q4.png'), ('corrAns', 3)]),
      OrderedDict([('ImageFile', 'assembling_images/q5.png'), ('corrAns', 3)]),
      OrderedDict([('ImageFile', 'assembling_images/q6.png'), ('corrAns', 3)]),
      OrderedDict([('ImageFile', 'assembling_images/q7.png'), ('corrAns', 4)]),
      OrderedDict([('ImageFile', 'assembling_images/q8.png'), ('corrAns', 4)]),
      OrderedDict([('ImageFile', 'assembling_images/q9.png'), ('corrAns', 4)]),
      OrderedDict([('ImageFile', 'assembling_images/q10.png'), ('corrAns', 1)]),
      OrderedDict([('ImageFile', 'assembling_images/q11.png'), ('corrAns', 3)]),
      OrderedDict([('ImageFile', 'assembling_images/q12.png'), ('corrAns', 1)]),
      OrderedDict([('ImageFile', 'assembling_images/q13.png'), ('corrAns', 4)]),
      OrderedDict([('ImageFile', 'assembling_images/q14.png'), ('corrAns', 4)]),
      OrderedDict([('ImageFile', 'assembling_images/q15.png'), ('corrAns', 1)]),
      OrderedDict([('ImageFile', 'assembling_images/q16.png'), ('corrAns', 2)])]
    Routine trial
  LoopTerminator questions
  Routine thank_you_slide
